<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon" xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q3="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q4="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns:q5="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CameraCapture">
          <q1:SerialNumber>23188422</q1:SerialNumber>
        </Combinator>
      </Expression>
      <Expression xsi:type="q2:PythonTransform">
        <q2:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

font = Font(4)

@returns(IplImage)
def process(value):
  data = value.Item1
  start = value.Item2
  elapsed = data.Timestamp - start
  output = data.Value.Clone()
  CV.PutText(output, elapsed.ToString("hh\:mm\:ss\.fff"), Point(300,400), font, Scalar.Rgb(255,0,0))
  return output</q2:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Skip">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:VideoWriter">
          <q3:FileName>Robin\test7.avi</q3:FileName>
          <q3:Suffix>None</q3:Suffix>
          <q3:Buffered>true</q3:Buffered>
          <q3:Overwrite>false</q3:Overwrite>
          <q3:FourCC>FMP4</q3:FourCC>
          <q3:FrameRate>25</q3:FrameRate>
          <q3:FrameSize>
            <q3:Width>0</q3:Width>
            <q3:Height>0</q3:Height>
          </q3:FrameSize>
          <q3:ResizeInterpolation>NearestNeighbor</q3:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>45750</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="q4:ReceiveMessage">
        <q4:Connection>MATLAB</q4:Connection>
        <q4:Address>/test</q4:Address>
        <q4:TypeTag>f</q4:TypeTag>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q5:CsvWriter">
        <q5:FileName>Robin\stim_times10.csv</q5:FileName>
        <q5:Append>false</q5:Append>
        <q5:Overwrite>false</q5:Overwrite>
        <q5:Suffix>None</q5:Suffix>
        <q5:IncludeHeader>false</q5:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Sample" />
      </Expression>
      <Expression xsi:type="q2:PythonTransform">
        <q2:Script>def process(value):
    if not hasattr(process, "frame"):
        process.frame = 0

    process.frame += 1
    return process.frame</q2:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>2</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>14</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>15</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>12</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>15</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Pylon.CameraCapture, Bonsai.Pylon, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Skip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Sample, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>